PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FreePlayJanken
  keyboardBackend = ioHub
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Routines
  Routine WelcomeRoutine
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    CodeComponent InitialCode
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import serial
        import time
        from pathlib import Path
        from psychopy import sound, core

        # Get the current file's path and directory
        current_file_path = Path(__file__).resolve()
        current_dir = str(current_file_path.parent)  # Directory of the current file
        print(current_dir)

        local_clock = time.perf_counter

        def event(serial_port, label):
            if serial_port != 0:
                win.callOnFlip(serial_port.write, str.encode('1'))
            local_time = local_clock()
            thisExp.addData(label, local_time)

        def winner(A_action, B_action):
            if A_action == 1:
                if B_action == 1:
                    return 0
                elif B_action == 2:
                    return 2
                elif B_action == 3:
                    return 1
            elif A_action == 2:
                if B_action == 1:
                    return 1
                elif B_action == 2:
                    return 0
                elif B_action == 3:
                    return 2
            elif A_action == 3:
                if B_action == 1:
                    return 2
                elif B_action == 2:
                    return 1
                elif B_action == 3:
                    return 0
            else:
                print("error when calculating winner")

        # change ****** to local serial port
        serial_port = serial.Serial('******', 115200, timeout=1)

        A_action = -1
        B_action = -1
        audio_root_path = ""
        num_repeat = 20
        round_index = 0
        A_button_pressed = 0
        B_button_pressed = 0
        A_score = 0
        B_score = 0
        winner_message = ""
        # Preload sounds into memory
        high_beep = sound.Sound(current_dir + '/audios/high_beep.wav')
        mid_beep = sound.Sound(current_dir + '/audios/mid_beep.wav')
        low_beep = sound.Sound(current_dir + '/audios/low_beep.wav')
        ready_sound = sound.Sound(current_dir + '/audios/ready.mp3')
      End Routine:
        high_beep.play()
        event(serial_port, "experiment_start")
    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome to the free-play stage!
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    KeyboardComponent EndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PlayRoutine
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    CodeComponent TriggerCode1
      Code Type = Auto->JS
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      Begin Routine:
        low_beep.play()
        event(serial_port, f"round_{round_index+1}_1")
      End Routine:
        mid_beep.play()
        event(serial_port, f"round_{round_index+1}_2")
    TextComponent PlayText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Please take action!
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    TextComponent TrialText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $"# " + str(round_index+1) + " trial"
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  Routine HoldRoutine
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    CodeComponent TriggerCode2
      Code Type = Auto->JS
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      End Routine:
        high_beep.play()
        event(serial_port, f"round_{round_index+1}_3")
    TextComponent HoldText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Please keep your action!
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    TextComponent TrialText_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $"# " + str(round_index+1) + " trial"
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  Routine RecordRoutine
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    CodeComponent RecordCode
      Code Type = Auto->JS
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      Begin Routine:
        A_button_pressed = 0
        B_button_pressed = 0
        RockA.fillColor = 'darkgrey'
        PaperA.fillColor = 'darkgrey'
        ScissorA.fillColor = 'darkgrey'
        RockB.fillColor = 'darkgrey'
        PaperB.fillColor = 'darkgrey'
        ScissorB.fillColor = 'darkgrey'
      Each Frame:
        if A_button_pressed == 1 and B_button_pressed == 1 and SubmitButton.isClicked:
            continueRoutine = False
      End Routine:
        thisExp.addData(f"A_action_{round_index+1}", A_action)
        thisExp.addData(f"B_action_{round_index+1}", B_action)
        result = winner(A_action, B_action)
        if result == 1:
            A_score += 1
        elif result == 2:
            B_score += 1
        A_action = -1
        B_action = -1
        round_index += 1
    TextComponent PlayerAText
      letterHeight = 0.05
      pos = (-0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Player A
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    TextComponent PlayerBText
      letterHeight = 0.05
      pos = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Player B
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    ButtonComponent RockA
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.2, 0)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Rock
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      callback:
        A_action = 1
        A_button_pressed = 1
        RockA.fillColor = 'lightgrey'
        PaperA.fillColor = 'darkgrey'
        ScissorA.fillColor = 'darkgrey'
    ButtonComponent RockB
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.2, 0)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Rock
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      callback:
        B_action = 1
        B_button_pressed = 1
        RockB.fillColor = 'lightgrey'
        PaperB.fillColor = 'darkgrey'
        ScissorB.fillColor = 'darkgrey'
    ButtonComponent PaperA
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.2, -0.15)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Paper
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      callback:
        A_action = 2
        A_button_pressed = 1
        RockA.fillColor = 'darkgrey'
        PaperA.fillColor = 'lightgrey'
        ScissorA.fillColor = 'darkgrey'
    ButtonComponent PaperB
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.2, -0.15)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Paper
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      callback:
        B_action = 2
        B_button_pressed = 1
        RockB.fillColor = 'darkgrey'
        PaperB.fillColor = 'lightgrey'
        ScissorB.fillColor = 'darkgrey'
    ButtonComponent ScissorA
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Scissors
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      callback:
        A_action = 3
        A_button_pressed = 1
        RockA.fillColor = 'darkgrey'
        PaperA.fillColor = 'darkgrey'
        ScissorA.fillColor = 'lightgrey'
    ButtonComponent ScissorB
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.2, -0.3)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Scissors
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      callback:
        B_action = 3
        B_button_pressed = 1
        RockB.fillColor = 'darkgrey'
        PaperB.fillColor = 'darkgrey'
        ScissorB.fillColor = 'lightgrey'
    ButtonComponent SubmitButton
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = submit
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  Routine GoodByeRoutine
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    CodeComponent WinnerCode
      Code Type = Auto->JS
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      Begin Routine:
        if A_score > B_score:
            winner_message = "Player A won.\nCongratulations"
        elif A_score < B_score:
            winner_message = "Player B won.\nCongratulations"
        else:
            winner_message = "You are both winners.\nCongratulations"
    TextComponent GoodByeText
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for your participating!
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    TextComponent WinnerText
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $winner_message
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  Routine Blank2000
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    TextComponent Blank2000Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Blank1500
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    CodeComponent ReadyRoutine
      Code Type = Auto->JS
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      Begin Routine:
        ready_sound.play()
    TextComponent BlankText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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Flow
  Routine WelcomeRoutine
  Routine Blank2000
  LoopInitiator PlayTrial loopType="TrialHandler"
    loopType = random
    nReps = num_repeat
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    Routine Blank1500
    Routine PlayRoutine
    Routine HoldRoutine
    Routine RecordRoutine
  LoopTerminator PlayTrial
  Routine GoodByeRoutine
