PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = JankenExp
  keyboardBackend = ioHub
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Routines
  Routine InstructionRoutine
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    CodeComponent InstructionCode
      Code Type = Auto->JS
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      Begin Routine:
        action_type = action_array[round_index]
        action_image_file = ""
        if action_type == 1:
            action_image_file = "images/rock.jpg"
        elif action_type == 2:
            action_image_file = "images/paper.jpg"
        else:
            action_image_file = "images/scissor.jpg"
        instruction_sound.play()
    TextComponent InstructionText
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Next Move:
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    ImageComponent ActionImage
      image [set every repeat] = $action_image_file
      pos = (0, -0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine CallJakenRoutine
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    CodeComponent TriggerCode1
      Code Type = Auto->JS
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      Begin Routine:
        #event(serial_port, f"action_{round_index+1}_1")
        phase_sound.play()
      End Routine:
        #event(serial_port, f"action_{round_index+1}_2")
        event(serial_port, f"action_{round_index+1}_1")
        low_beep.play()
    TextComponent TrialAndActionText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $"# " + str(round_index+1) + " trial, the designated action is " + current_action
  Routine ActionRoutine
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    CodeComponent TriggerCode2
      Code Type = Auto->JS
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      End Routine:
        event(serial_port, f"action_{round_index+1}_2")
    TextComponent ActionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Please take action
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    SoundComponent Beep1
      sound = audios/low_beep.wav
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.1
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  Routine HoldingRoutine
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    CodeComponent TriggerCode3
      Code Type = Auto->JS
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      End Routine:
        event(serial_port, f"action_{round_index+1}_2")
        high_beep.play()
        round_index += 1
    TextComponent HoldingText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Please keep your action
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    TextComponent TrialAndActionText_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $"# " + str(round_index+1) + " trial, the designated action is " + current_action
  Routine WelcomeRoutine
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    CodeComponent InitialCode
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import time
        import socket
        import sys
        import serial
        from pathlib import Path
        from psychopy import sound, core

        # Get the current file's path and directory
        current_file_path = Path(__file__).resolve()  # Full path of the current file
        current_dir = str(current_file_path.parent)

        local_clock = time.perf_counter

        def event(serial_port, label):
            if serial_port != 0:
                win.callOnFlip(serial_port.write, str.encode('1'))
            local_time = local_clock()
            thisExp.addData(label, local_time)

        # change ****** to local serial port
        serial_port = serial.Serial('******', 115200, timeout=1)

        language = -1
        audio_root_path = ""
        num_repeat = 5

        action_array = np.concatenate([np.ones(num_repeat) * 1, np.ones(num_repeat) * 2, np.ones(num_repeat) * 3])
        np.random.shuffle(action_array)
        thisExp.addData("action_array", action_array)
        round_index = 0
        current_action = ""
      End Routine:
        thisExp.addData("language", language)
        print(language)
        if language == 0:
            audio_root_path = current_dir + "/audios/zh/"
        elif language == 1:
            audio_root_path = current_dir + "/audios/en/"
        else:
            audio_root_path = current_dir + "/audios/jp/"
        print(audio_root_path)
        instruction_sound = sound.Sound(audio_root_path + "next_action.mp3")
        rock_sound = sound.Sound(audio_root_path + "rock.mp3")
        paper_sound = sound.Sound(audio_root_path + "paper.mp3")
        scissor_sound = sound.Sound(audio_root_path + "scissor.mp3")
        phase_sound = sound.Sound(audio_root_path + "phrase.mp3")
        low_beep = sound.Sound(current_dir + "/audios/low_beep.wav")
        high_beep = sound.Sound(current_dir + "/audios/high_beep.wav")
        event(serial_port, "experiment_start")
    TextComponent WelcomeText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        Please select the language you prefer:
    ButtonComponent ChineseButton
      bold = True
      callback = language = 0
      forceEndRoutine = True
      letterHeight = 0.03
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = Chinese
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    ButtonComponent EnglishButton
      bold = True
      callback = language = 1
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.12)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = English
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    ButtonComponent JapaneseButton
      bold = True
      callback = language = 2
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.24)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = Japanese
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  Routine GoodByeRountine
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    TextComponent GoodByeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for your participating!
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  Routine InstructionRoutine2
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    CodeComponent InstructionCode_2
      Code Type = Auto->JS
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      Begin Routine:
        action_type = action_array[round_index]
        action_image_file = ""
        if action_type == 1:
            action_image_file = "images/rock.jpg"
            current_action = "rock"
            rock_sound.play()
        elif action_type == 2:
            action_image_file = "images/paper.jpg"
            current_action = "paper"
            paper_sound.play()
        else:
            action_image_file = "images/scissor.jpg"
            current_action = "scissors"
            scissor_sound.play()
    TextComponent InstructionText_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Next Move:
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    ImageComponent ActionImage_2
      image [set every repeat] = $action_image_file
      pos = (0, -0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Blank1000
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    TextComponent Blank1000Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine WelcomeRoutine
  LoopInitiator PlayTrials loopType="TrialHandler"
    loopType = random
    nReps = num_repeat * 3
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    Routine Blank1000
    Routine InstructionRoutine
    Routine InstructionRoutine2
    Routine CallJakenRoutine
    Routine HoldingRoutine
    Routine Blank1000
  LoopTerminator PlayTrials
  Routine GoodByeRountine
